PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '0', 'session': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 2
  Units = use prefs
  Window size (pixels) = [2560, 1440]
  color = 1.0000, 1.0000, 1.0000
  expName = EMS-TMR_retrievalv1
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instuctions_part3
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        Willkommen zum dritten Teil des Experiments.

        Hier wirst du jetzt die Möglichkeit haben die Wort-Bild Paare noch besser zu lernen. Im Folgenden wird dir immer ein Word vorgespielt. Deine Aufgabe ist es anschließend anzugeben, ob das Wort dir bereits bekannt ist (alt) oder ob du es bisher noch nicht gehört hattest (neu). Sollte dir das Wort bekannt sein wirst du anschließend aufgefordert aus 4 Bildern das zu dem Wort gehörige Bild auszuwählen.
    KeyboardComponent key_resp
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if session==str(1):
            continueRoutine = True
        else:
            continueRoutine = False

        if language == "english":
            text = """Welcome to the third part of the experiment.
            Here you will now have the opportunity to learn the word-picture pairs even better.
            """
  Routine sound_word
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    TextComponent fixation
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = cross_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        verb.setSound("stimuli/sounds/de_" + df_trial.word + ".mp3")
        verb.play() # play the sound

        is_newword = df_trial.is_new


        # debug printing
        msg += f' {"foil" if is_newword else ""}'
        log(msg)
      End Routine:
        verb.stop()
    SoundComponent verb
      forceEndRoutine = False
      sound [set every repeat] = $"stimuli/sounds/de_" + df_trial.word + ".mp3"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent trigger_word
      Code Type = Py
      Begin Routine:
        if is_newword == True:
            send_trigger(40, duration = 0.005)
            trigger_send = False
        else:
            send_trigger(30, duration=0.005)
            trigger_send = False
      Each Frame:
        if verb.status==FINISHED and not trigger_send and is_newword == False:
            trigger_send = True
            send_trigger(31, duration=0.005)
        elif verb.status==FINISHED and not trigger_send and is_newword == True:
            trigger_send = True
            send_trigger(41, duration=0.005)
      End Routine:
        core.wait (0.02)
  Routine decision_newword
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    TextComponent text_7
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      pos = (0, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        War dir das Wort bekannt?

        bekannt /alt                      unbekannt/neu
    KeyboardComponent key_resp_7
      allowedKeys = 'b','g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent known_green
      fillColor = none
      lineColor = -1.0000, 1.0000, -0.0039
      lineWidth = 1.5
      pos = (-0.25, 0)
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent new_blue
      fillColor = none
      lineColor = -0.2157, 0.1686, 0.8588
      lineWidth = 1.5
      pos = (0.2, 0)
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text_tooslow
      color = 1.0000, 1.0000, 1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 2
      stopVal [time (s)] = 2.75
      text = dummy
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    CodeComponent decision_code
      Code Type = Py
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      Begin Routine:
        #event.getKeys löscht die Liste, sobald sie an den Code übergeben wurde...
        no_press = False
        button_press = None
        key_resp_7.clearEvents()

        word = str(df_trial.word)
      Each Frame:
        #keys = key_resp_7.getKeys(clear = True, waitRelease = False)
        #print ('keys', keys)

        #if keys:
        #    button_press = [keys[-1].name]
        #    print ('button_press', button_press)
      End Routine:
        button_press = [key_resp_7.keys]
        print ('button_press', button_press)

        #defining logic
        if button_press == ["g"] and is_newword == True:
            false_alarms += 1
            print ("False Alarm") #neu als bekannt ausgewählt
            responslog.write(session = "word_decision", trial_num= i_retrieval, trial_type= "new", response='wrong', response_type='false alarm')
        elif button_press == ["g"] and is_newword == False:
            print ("Correct press")
            responslog.write(session = "word_decision", trial_num= i_retrieval, trial_type= "old", response='old', response_type='correct')
        elif button_press == ["b"] and is_newword == True:
            print ("Correct press")
            responslog.write(session = "word_decision", trial_num= i_retrieval, trial_type= "new", response='new', response_type='correct')
        elif button_press == ["b"] and is_newword == False:
            misses += 1
            print ("Miss") #bekanntes als neu ausgewählt
            responslog.write(session = "word_decision", trial_num= i_retrieval, trial_type= "old", response='new', response_type='miss')


        #Falls keine Taste gedrückt wurde (Achtung, der Keyboard Status ändert sich immernoch nicht regulär)
        if button_press == [None] or button_press == [[]]:
            print ("too slow word")
            responslog.write(session = "word_decision", trial_num= i_retrieval, trial_type= "", response='none', response_type='too_slow')
            text_tooslow.text = "Zu langsam, antworte schneller."
            text_tooslow.color = "red"
            no_press = True

        print("Status:", key_resp_7.status)
        key_resp_7.clearEvents()

        #keine Bilderauswahl bei neuem Wort
        nReps = 1
        nReps2 = 1
        nReps3 = 1
        if is_newword == True and session == str(1):
            nReps = 0
            nReps2 = 0
            nReps3 = 0

        #elif no_press == True:
        #    nReps = 0
        #    nReps2 = 0
        #    nReps3 = 0
        #print ("nReps:", nReps)
        #print ("nReps2:", nReps2)
    CodeComponent trigger_decision_word
      Code Type = Py
      End Routine:
        send_trigger (77,duration = 0.005)
  Routine imagechoice
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    ImageComponent image_choice1
      image = stimuli/dog/dog000.png
      pos = (0, 0.25)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
      units = height
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    ImageComponent image_choice2
      image = stimuli/flower/flower000.png
      pos = (0.5, 0)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
      units = height
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    ImageComponent image_choice3
      image = stimuli/flower/flower005.png
      pos = (0, -0.25)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
      units = height
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    TextComponent text_8
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Welches Bild passt zu dem Wort?
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    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        #keine Überschreibungen der Tastendrücke
        button_press = None
        key_resp_retrieval.clearEvents ()


        #Bilderzuweisung
        image_choice1.image = "stimuli/" + df_trial.image1
        image_choice2.image = "stimuli/" + df_trial.image2
        image_choice3.image = "stimuli/" + df_trial.image3
        image_choice4.image = "stimuli/" + df_trial.image4

        #richtiges Bild
        correct_image = df_trial.correct
        log ("correct image:" , correct_image)

        #define correct_buttonpress
        if correct_image == df_trial.image1:
            correct_buttonpress = ["r"]
            log ("correct_press:", correct_buttonpress)

        elif correct_image == df_trial.image2:
            correct_buttonpress = ["b"]
            log ("correct_press:",correct_buttonpress)

        elif correct_image == df_trial.image3:
            correct_buttonpress = ["y"]
            log ("correct_press:",correct_buttonpress)

        elif correct_image == df_trial.image4:
            correct_buttonpress = ["g"]
            log ("correct_press:",correct_buttonpress)

        elif correct_image == "N/A":
            correct_buttonpress = []
            log ("correct_press:",correct_buttonpress)
      Each Frame:
        #keys = key_resp_retrieval.getKeys(clear = True)

        #if keys:  # Wenn eine Taste gedrückt wurde
        #    print (keys)
        #    button_press = [keys[-1].name]  # Speichere die letzte gedrückte Taste
        #    print(button_press)
      End Routine:
        button_press = [key_resp_retrieval.keys]
        print ('button_press', button_press)

        #Falls keine Taste gedrückt wurde (Achtung, der Keyboard Status ändert sich immernoch nicht regulär)
        if button_press == [None] or button_press == [[]]:
            print ("too slow image")
            #log Ergebnisse
            responslog.write(session = "1", trial_num= i_retrieval, trial_type= "old", response='none', response_type='too_slow')
            text_tooslowimg.text = "Ups, zu langsam."
            text_tooslowimg.color = "red"
            no_press = True

        if misses == initial_value_misses and false_alarms == initial_value_false_alarms and button_press != correct_buttonpress and no_press == False and is_newword == False:
                incorrect_associations = incorrect_associations + 1
                responslog.write(session = "1", trial_num= i_retrieval, trial_type= "old", response='wrong', response_type='incorrect_association')
                print ("incorrect_association")

        print ("Status:", key_resp_retrieval.status)

        #log Ergebnisse
        if misses != initial_value_misses and button_press != correct_buttonpress and no_press == False and is_newword == False:
            responslog.write(session = "1", trial_num= i_retrieval, trial_type= "old", response='word wrong image correct', response_type='0.5*correct_association')
        elif false_alarms==initial_value_false_alarms and misses==initial_value_misses and incorrect_associations == initial_value_incorrect_associations and no_press == False and is_newword == False:
            responslog.write(session = "1", trial_num= i_retrieval, trial_type= "old", response='correct', response_type='correct_association')
        elif false_alarms == initial_value_false_alarms and misses!= initial_value_misses and button_press != correct_buttonpress and no_press == False:
            responslog.write(session = "1", trial_num= i_retrieval, trial_type= "old", response='wrong', response_type='double_wrong')

        key_resp_retrieval.clearEvents ()
    KeyboardComponent key_resp_retrieval
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_choice4
      image = stimuli/face/face005.png
      pos = (-0.5,0)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
      units = height
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    PolygonComponent img1_polygon
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos = (0, 0.25)
      shape = rectangle
      size = polygon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
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    PolygonComponent img2_polygon
      fillColor = None
      lineColor = -1.0000, -1.0000, 1.0000
      lineWidth = 2
      pos = (0.5, 0)
      shape = rectangle
      size = polygon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
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    PolygonComponent img3_polygon
      fillColor = None
      lineColor = 1.0000, 1.0000, -1.0000
      lineWidth = 2
      pos = (0, -0.25)
      shape = rectangle
      size = polygon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
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    PolygonComponent img4_polygon
      fillColor = None
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 2
      pos = (-0.5, 0)
      shape = rectangle
      size = polygon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
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    TextComponent text_tooslowimg
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.75
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    CodeComponent trigger_image_choice
      Code Type = Py
      Begin Routine:
        send_trigger(20, duration=0.005)
      End Routine:
        send_trigger(21, duration=0.005)
  Routine fixation_cross
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    TextComponent retrieval_fixation
      color = -1.0000, -1.0000, -1.0000
      durationEstim = 1.5
      font = Times New Roman
      letterHeight = cross_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_fixation_cross
      text = +
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    CodeComponent code_13
      Code Type = Py
      Begin Routine:
        initial_value_misses = misses
        initial_value_false_alarms = false_alarms
        initial_value_incorrect_associations = incorrect_associations
    CodeComponent trigger_fixation
      Code Type = Py
      Begin Routine:
        send_trigger (99, duration =0.005)
  Routine retrieval_feedback
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if false_alarms==initial_value_false_alarms and misses==initial_value_misses and incorrect_associations == initial_value_incorrect_associations and no_press == False:
            feedback_string = 'Super, alles richtig!\n\n'
            retrieval_text.text = feedback_string
            retrieval_text.color = 'green'
        else:
            feedback_string = ''
            if no_press == True:
                feedback_string += f"Du musst schneller antworten."
            if misses != initial_value_misses and incorrect_associations == initial_value_incorrect_associations:
                feedback_string += f"Super, obwohl du das Wort erst nicht erkannt hast, hast du trotzdem das richtige Bild ausgesucht. \n"
            if incorrect_associations != initial_value_incorrect_associations:
                feedback_string += f' Du hast leider das falsche Bild zu dem richtig als bekannt erkannten Wort ausgewählt. \n'
            retrieval_text.text = feedback_string
            retrieval_text.color = 'red'
      End Routine:
        #count to next trial
        i_retrieval += 1

        # set the break conditional to true to display a break
        n_break_conditional = int(i_block in breaks_after_block) # i_block in break
    TextComponent retrieval_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = dummy...something went wrong
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  Routine instructions_part3_2
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Wie auch bei der ersten und zweiten Aufgabe wirst du hier zunächst eine Übung durchlaufen können.

        Falls du noch Fragen hast, melde dich gerne beim Experimentleiter.

        Ansonsten drücke gerne eine beliebige Taste, um mit der Übung zu starten.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','b','r','g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if session==str(1):
            continueRoutine = True
        else:
            continueRoutine = False

        if language == "english":
            text_2 = """ As with the first and second tasks, you will first be able to complete a practice exercise.
            If you have any questions, please contact the experimentor.
            Otherwise, press any button to start the exercise."""
  Routine practice_feedback
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent feedback_loop
      Code Type = Auto->JS
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      Begin Routine:
        if false_alarms==0 and misses==0 and incorrect_associations == 0 and no_press == False:
            retrieval_repetition.finished=True
            feedback_string = 'Gratuliere, du hast alles richtig gemacht!\n\n'
            feedback_string += 'Es geht nun weiter mit dem tatsächlichen Experiment.\n\n'
            feedback_string += "Denke daran, jetzt wird dein tatsächliches Lernmaterial weiter vertieft. Die Übungspaare kannst du vergessen. :)\n\n"
            feedback_string += 'Bitte drücke eine Taste um fortzufahren.'
            text_feedback.text = feedback_string
        else:
            feedback_string = ''
            if misses:
                feedback_string += f'Du hast {misses}x verpasst ein altes Wort als bekannt anzugeben und es als neu betitelt.\n'
            if false_alarms:
                feedback_string += f'Du hast {false_alarms}x ein neues Wort als bekannt gewertet. \n'
            if incorrect_associations:
                feedback_string += f'Du hast {incorrect_associations}x ein falsches Bild einem bekannten Wort zugeordnet. \n'
            if no_press == True:
                feedback_string += f"Du hast mitunter nicht rechtzeitig geantwortet. \n"
            feedback_string += 'Falls du Fragen hast, stelle diese gerne dem Experimentleiter.\n'
            feedback_string += '\nDrücke eine beliebige Taste um die Übung zu wiederholen.'
            text_feedback.text = feedback_string

            # reset counters
            i_retrieval = 0
            false_alarms = 0
            misses = 0
            incorrect_associations = 0
    TextComponent text_feedback
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = dummy... something went wrong
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  Routine instructions_part3_3
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    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if session == str(1):
            if language == "german":
                text_3.text = """Nun folgt die erste Testung deines erarbeiteten Wissens. \n
                Die Aufgabe ändert sich hierbei nicht. Es wird dir wieder zunächst ein Wort vorgespielt, welches sowohl alt als auch neu sein kann. \n
                Du gibst bitte wieder im Anschluss an, ob das Wort dir bekannt ist oder nicht. Danach werden dir wieder 4 Bilder gezeigt, aus welchen du das zu dem Wort passende Bild auswählen kannst. \n
                Diesmal erhälst du allerdings kein Feedback zu deinen Antworten.
                """
            if language == "english":
                text_3.text = """ Now comes the first test of your acquired knowledge.
                The task does not change here. Again, you will first be presented with a word that you have to classify as old or new and then 3 pictures will be presented from which you can choose the picture that matches the word.
                From now on, however, you will no longer receive feedback as to whether your answer was correct or incorrect. """
        if session == str(2):
            if language == "german":
                text_3.text = """ Willkommen zur letzten Aufgabe dieses Experiments.
                Ich hoffe du konntest dich während des Mittagsschlafs gut erholen und bist nun fit für die Aufgabe.
                Hier wird dein Wissen nocheinmal geprüft.Die Aufgabe ändert sich hierbei nur leicht.
                Du wirst wieder Wörter vorgespielt bekommen und musst anschließend angeben, ob dir das Wort bekannt war oder nicht. \n
                Anschließend musst du nun immer aus 4 Bildern das zu dem Wort passende Bild auswählen, auch wenn dir das Wort tatsächlich neu war. \n
                Solltest du der Meinung sein, dass das Wort neu war, dann wähle bitte das Bild aus, welches zu dem Wort passen würde, wäre das Wort dir doch bekannt gewesen.
                \n
                Drücke eine beliebige Taste um fortzufahren."""
            elif language == "english":
                text_3.text = """Welcome to the last task of this experiment.
                I hope you had a good rest during your afternoon nap and are now fit for this task.
                The task is the same as before the afternoon nap.
                You will be played words again and then have to choose the picture that matches the word from 4 pictures.
                Press any button to continue. """
  Routine instruction_end
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    TextComponent text_5
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Sehr gut, du hast es geschafft.
        Die Übung ist nun beendet.

        Melde dich bitte beim Experimentleiter.
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            text_5 = """ Very nice, you made it. The exercise is now over.
            Please inform the experimentor that you are finished."""
  Routine startup_code
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    CodeComponent startup
      Code Type = Py
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      Begin Experiment:
        import pandas as pd
        import meg_triggers
        from meg_triggers import send_trigger
        meg_triggers.enable_printing()

        subj_id = f"{int(expInfo['participant']):02d}"
        session = expInfo["session"]

        df_retrieval_1 = pd.read_excel(f"sequences/{subj_id}_retrieval_1.xlsx")
        df_retrieval_2 = pd.read_excel(f"sequences/{subj_id}_retrieval_2.xlsx")
        df_retrieval_3 = pd.read_excel(f"sequences/{subj_id}_retrieval_3.xlsx")
        df_retrieval_prac = pd.read_excel(f"sequences/retrieval_practice.xlsx")
        df_buffer = pd.read_excel(f"sequences/buffer_encoding_retrievalFeedback.xlsx")

        # set variables we will access later
        i_retrieval = 0
        i_block = 0
        initial_value_misses = 0
        initial_value_false_alarms = 0
        initial_value_incorrect_associations = 0
        i_buffer = 0
        i_buffer_recency = 4
        ##set sound to a different samplerate!!!
        verb = sound.Sound('A', stereo= True, hamming=True, secs=-1, sampleRate= 24000)
        verb_prac = verb

        # store answers
        false_alarms = 0
        misses = 0
        incorrect_associations = 0

        # set the number of repetitions we have
        #n_retrieval_trials = len (df_retrieval_1) #oder durch4, dass Pausen funktionieren?
        #n_retrieval2_trials = len (df_retrieval_3) #oder durch4, dass Pausen funktionieren?
        n_break_blocks = 4
        n_break_blocks2 = 4
        n_retrieval_trials_prac = 4
        n_retrieval_repetition = 99
        n_buffer_primacy = 4
        n_buffer_recency = 4
        nReps = 1
        nReps2 = 1
        nReps3 = 1

        #Only play last routines (Post Retrieval) in session 2
        if session==str(2):
            #retrieval_trials_prac.finished = True
            #retrieval_repetition.finished = True
            #retrieval_trials.finished = True
            # set the number of repetitions we have
            n_retrieval_trials = 0
            #n_retrieval2_trials = df_retrieval_3.shape [0]
            n_retrieval_trials_prac = 0
            n_retrieval_repetition = 0
            n_break_blocks = 0
            n_buffer_primacy = 0
            n_buffer_recency = 0
            nReps = 1

        if PILOTING:
            n_retrieval_trials = 5
            n_retrieval2_trials = 6
            n_retrieval_trials_prac = 4
            print('DUMMY TRIALS: subj_id is set to 0')

            if session == str(2):
                n_retrieval_trials = 0
                n_retrieval2_trials = 5
                n_retrieval_trials_prac = 0
                n_retrieval_repetition = 0
                print ('DUMMY TRIALS: subj_id is set to 0')
    CodeComponent settings
      Code Type = Auto->JS
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      Begin Experiment:
        t_img_retrieval = 5
        t_isi_retrieval = 2.5
        t_buffer = 10
        image_size = 0.4
        image_size_example = 0.2
        polygon_size = [0.4,0.4]
        t_fixation_cross = 1.5
        cross_color = (-0.5, -0.5, -0.5)
        cross_height = 0.1
        letter_height=0.06
        language = "german"

        #breaks after 32 trials
        breaks_after_block = [0,1,2,3]
        n_retrieval_trials = 48
        n_retrieval2_trials = 48

        if PILOTING:
            n_retrieval_trials = 3
            n_retrieval2_trials = 3

        #trigger müssen noch richtig definiert werden
        trigger_img = {}
        trigger_img['dog'] = 1
        trigger_img['car']   = 2
        trigger_img['flower']   = 3
        trigger_img['face']   = 4

        trigger_break_start = 91
        trigger_break_stop = 92
        trigger_buf_start = 61
        trigger_buf_stop = 62
        trigger_fixation_pre1 = 81
        trigger_fixation_pre2 = 82

        # these get added depending on the trial
        # ie. Gesicht in localizer = 1, as cue = 11, as sequence=21
        trigger_base_val_retrieval = 0
        trigger_base_val_retrieval_distractor = 100
    CodeComponent function
      Code Type = Py
      Begin Experiment:
        import os.path as osp
        def get_image_name(filename):
            return osp.splitext(osp.basename(filename))[0]

        # define a log function that flushes directly
        def log(*msgs, sep=' ', end='\n'):
            log_file = u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'] + '_print.log')
            print(*msgs, sep=sep, end=end, flush=True)

            # Append to log file
            with open(log_file, 'a') as f:
                f.write(sep.join(str(msg) for msg in msgs) + end)
    CodeComponent save_data
      Code Type = Py
      Begin Experiment:
        import pandas as pd
        import datetime

        class ResponseLog:

            def __init__(self, filename):
                self.filename = filename
                self.df = pd.DataFrame()

            def write(self, **kwargs):
                # Add timestamp
                row_data = {'timestamp': str(datetime.datetime.now())}

                # Add all kwargs to row data
                row_data.update(kwargs)

                # Create a single-row DataFrame
                new_row = pd.DataFrame([row_data])

                # Append to existing DataFrame
                self.df = pd.concat([self.df, new_row], ignore_index=True)

                # Save to CSV
                self.df.to_csv(self.filename, index=False)

                return self.df

        responslog = ResponseLog(u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date']) + '_responses.csv')
  Routine instruction_part4
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        if session==str(1):
            continueRoutine = False
        else:
            continueRoutine = True

        if language == "english":
            text_2 = """ """
    TextComponent text_6
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Willkommen
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    KeyboardComponent key_resp_6
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine save_reset
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        if session == str(1):
            #save feedback round scores
            false_alarms_feedback = false_alarms
            misses_feedback = misses
            incorrect_associations_feedback = incorrect_associations
            print ("Retrieval_Feedback fertig, jetzt startet noch der Buffer, dann Retrieval_PreSleep.")


        # reset counters
        i_retrieval = 0
        false_alarms = 0
        misses = 0
        incorrect_associations = 0
        i_buffer_recency = 4

        if session == str(2):
            print ("Mittagsschlaf fertig, jetzt startet Retrieval_PostSleep.")
  Routine instructions_part3_1
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    TextComponent text_9
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        Für die Entscheidung, ob das Wort bekannt ist, hast du 2 Sekunden Zeit. Drücke links (grün), wenn dir das Wort bekannt war und drücke rechts (blau), wenn dir das Wort unbekannt war.

        Für die Auswahl des passenden Bildes bekommst du 5 Sekunden Zeit.
        Drücke die passende Taste, um das Bild auszuwählen.
    KeyboardComponent key_resp_8
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent code_11
      Code Type = Py
      Begin Routine:
        if session==str(1):
            continueRoutine = True
        else:
            continueRoutine = False

        if language == "english":
            text = """
            In the following, a word will be played. Your task is to indicate whether you already know the word (old) or whether you have never heard it before (new).
            If you know the word, you will then be asked to choose the picture that is associated with the word from four choices.
            You have 2 seconds to answer whether the word was new.
            You have 5 seconds to decide which image fits the word"""
  Routine reset
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    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        # reset counters
        i_retrieval = 0
        false_alarms = 0
        misses = 0
        incorrect_associations = 0

        if session == str(1) and i_buffer == 0:
            print ("Übung fertig, jetzt startet Retrieval_Feedback mit dem Buffer.")
        elif session == str(1) and i_buffer == 4:
            print ("Buffer Durchgänge fertig, es geht los mit Retrieval_Feedback.")
        elif session == str(1) and i_buffer == 8:
            print ("Buffer Recency fertig, wir machen weiter mit Retrieval_PreSleep.")
  Routine df_marking_1
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    CodeComponent df_trial
      Code Type = Py
      Begin Routine:
        df_trial = df_retrieval_1.iloc[i_retrieval]

        msg = f'retrieval session 1 with feedback {i_retrieval}/48, block {i_block}/4'
        log (msg)
  Routine df_marking_2
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    CodeComponent df_trial_2
      Code Type = Py
      Begin Routine:
        if session == str(1):
            df_trial = df_retrieval_2.iloc[i_retrieval]
            msg = f'retrieval session 1 no feedback {i_retrieval}/48, block {i_block}/4'
            log(msg)
        elif session == str(2):
            df_trial = df_retrieval_3.iloc[i_retrieval]
            msg = f'retrieval session 2 no feedback {i_retrieval}/48, block {i_block}/4'
            log (msg)
  Routine onesecond
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    CodeComponent code_33
      Code Type = Py
      Begin Routine:
        jitter = random() * (1.0 - 0.0) + 0.5
        jitter = round (jitter, 1)
    TextComponent text_10
      color = black
      font = Times New Roman
      letterHeight = cross_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text = +
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  Routine wordknown
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    TextComponent text_11
      color = black
      font = Times New Roman
      letterHeight = letter_height
      pos = (0, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        War dir das Wort bekannt?

        bekannt /alt                      unbekannt/neu
    PolygonComponent known_left_green
      fillColor = none
      lineColor = -1.0000, 1.0000, -0.0039
      lineWidth = 1.5
      pos = (-0.25, 0)
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent new_right_blue
      fillColor = none
      lineColor = -0.2157, 0.1686, 0.8588
      lineWidth = 1.5
      pos = (0.25, 0)
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_9
      allowedKeys = 'b','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent code_15
      Code Type = Py
      Begin Routine:
        key_resp_9.clearEvents()
        button_press = None
      End Routine:
        button_press = [key_resp_9.keys]
        print ('button_press', button_press)

        #Falls keine Taste gedrückt wurde (Achtung, der Keyboard Status ändert sich immernoch nicht regulär)
        if button_press == [None] or button_press == [[]]:
            print ("too slow word")
            no_press = True

        #defining logic
        if button_press == ["g"] and is_newword == True:
            false_alarms += 1
            print ("False Alarm") #neu als bekannt ausgewählt
        elif button_press == ["g"] and is_newword == False:
            print ("Correct press")
        elif button_press == ["b"] and is_newword == True:
            print ("Correct press")
        elif button_press == ["b"] and is_newword == False:
            misses += 1
            print ("Miss") #bekanntes als neu ausgewählt
        elif misses == initial_value_misses and false_alarms == initial_value_false_alarms and button_press_img != correct_buttonpress and no_press == False:
                incorrect_associations = incorrect_associations + 1
                print ("incorrect_association")




        print("Status:", key_resp_9.status)
        key_resp_9.clearEvents()

        i_retrieval += 1

        # set the break conditional to true to display a break
        n_break_conditional = int(i_block in breaks_after_block)
  Routine imagechoice_2
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    ImageComponent image_choice1_2
      image = stimuli/dog/dog000.png
      pos = (0, 0.25)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
      units = height
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    ImageComponent image_choice2_2
      image = stimuli/flower/flower000.png
      pos = (0.5, 0)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
      units = height
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    ImageComponent image_choice3_2
      image = stimuli/flower/flower005.png
      pos = (0, -0.25)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
      units = height
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    TextComponent text_12
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Welches Bild passt zu dem Wort?
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    CodeComponent code_14
      Code Type = Py
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      Begin Routine:
        #keine Überschreibungen der Tastendrücke
        button_press_img = None
        key_resp_retrieval_2.clearEvents ()

        #Bilderzuweisung
        image_choice1_2.image = "stimuli/" + df_trial.image1
        image_choice2_2.image = "stimuli/" + df_trial.image2
        image_choice3_2.image = "stimuli/" + df_trial.image3
        image_choice4_2.image = "stimuli/" + df_trial.image4

        #richtiges Bild
        correct_image = df_trial.correct
        print (correct_image)

        #define correct_buttonpress
        if correct_image == df_trial.image1:
            correct_buttonpress = ["r"]
            print (correct_buttonpress)

        elif correct_image == df_trial.image2:
            correct_buttonpress = ["b"]
            print (correct_buttonpress)

        elif correct_image == df_trial.image3:
            correct_buttonpress = ["y"]
            print (correct_buttonpress)

        elif correct_image == df_trial.image4:
            correct_buttonpress = ["g"]
            print (correct_buttonpress)

        elif correct_image == "N/A":
            correct_buttonpress = []
            print (correct_buttonpress)
      End Routine:
        button_press_img = [key_resp_retrieval_2.keys]
        print ('button_press_img', button_press_img)

        #Falls keine Taste gedrückt wurde (Achtung, der Keyboard Status ändert sich immernoch nicht regulär)
        if button_press_img == [None] or button_press_img == [[]]:
            print ("too slow image")
            #log Ergebnisse
            if session == str(1):
                responslog.write(session = "2", trial_num= i_retrieval, trial_type= "", response='none', response_type='too_slow')
            elif session == str(2):
                responslog.write(session = "3", trial_num= i_retrieval, trial_type= "", response='none', response_type='too_slow')
            #text_tooslowimg_2.text = "Ups, zu langsam."
            #text_tooslowimg_2.color = "red"
            no_press = True

        if misses == initial_value_misses and false_alarms == initial_value_false_alarms and button_press_img != correct_buttonpress and no_press == False and is_newword == False:
                incorrect_associations = incorrect_associations + 1
                if session == str(1):
                    responslog.write(session = "2", trial_num= i_retrieval, trial_type= "old", response='wrong', response_type='incorrect_association')
                elif session == str(2):
                    responslog.write(session = "3", trial_num= i_retrieval, trial_type= "old", response='wrong', response_type='incorrect_association')
                print ("incorrect_association")

        print ("Status:", key_resp_retrieval_2.status)

        #log Ergebnisse
        if session == str(1):
            if misses != initial_value_misses and button_press_img == correct_buttonpress and no_press == False and is_newword == False:
                responslog.write(session = "2", trial_num= i_retrieval, trial_type= "old", response='word wrong image correct', response_type='0.5*correct_association')
            elif false_alarms==initial_value_false_alarms and misses==initial_value_misses and incorrect_associations == initial_value_incorrect_associations and no_press == False and is_newword == False:
                responslog.write(session = "2", trial_num= i_retrieval, trial_type= "old", response='correct', response_type='correct_association')
            elif false_alarms==initial_value_false_alarms and misses!=initial_value_misses and incorrect_associations != initial_value_incorrect_associations and no_press == False:
                responslog.write(session = "2", trial_num= i_retrieval, trial_type= "old", response='wrong', response_type='double wrong')
        if session == str(2):
            if misses != initial_value_misses and button_press_img == correct_buttonpress and no_press == False and is_newword == False:
                responslog.write(session = "3", trial_num= i_retrieval, trial_type= "old", response='word wrong image correct', response_type='0.5*correct_association')
            elif false_alarms==initial_value_false_alarms and misses==initial_value_misses and incorrect_associations == initial_value_incorrect_associations and no_press == False and is_newword == False:
                responslog.write(session = "3", trial_num= i_retrieval, trial_type= "old", response='correct', response_type='correct_association')
            elif false_alarms==initial_value_false_alarms and misses!=initial_value_misses and button_press_img != correct_buttonpress and no_press == False:
                responslog.write(session = "3", trial_num= i_retrieval, trial_type= "old", response='wrong', response_type='double_wrong')

        key_resp_retrieval_2.clearEvents ()
    KeyboardComponent key_resp_retrieval_2
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_choice4_2
      image = stimuli/face/face005.png
      pos = (-0.5,0)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
      units = height
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    PolygonComponent img1_polygon_2
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos = (0, 0.25)
      shape = rectangle
      size = polygon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
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    PolygonComponent img2_polygon_2
      fillColor = None
      lineColor = -1.0000, -1.0000, 1.0000
      lineWidth = 2
      pos = (0.5, 0)
      shape = rectangle
      size = polygon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
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    PolygonComponent img3_polygon_2
      fillColor = None
      lineColor = 1.0000, 1.0000, -1.0000
      lineWidth = 2
      pos = (0, -0.25)
      shape = rectangle
      size = polygon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
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    PolygonComponent img4_polygon_2
      fillColor = None
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 2
      pos = (-0.5, 0)
      shape = rectangle
      size = polygon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
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    TextComponent text_tooslowimg_2
      letterHeight = 0.05
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.75
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    CodeComponent trigger_image_choice_2
      Code Type = Py
      Begin Routine:
        send_trigger(50, duration=0.005)
      End Routine:
        send_trigger(51, duration=0.005)
  Routine instructions_part3_3_2
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Versuche dennoch aufmerksam zu bleiben und so schnell und akkurat wie möglich zu antworten. Weiterhin wäre es super, wenn du es schaffst, so still wie möglich zu liegen und deinen Kopf nicht zu bewegen, um eine gute Datenqualität zu garantieren.


        Falls du noch Fragen hast melde dich gerne beim Experimentleiter.
    KeyboardComponent key_resp_5
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            text_4.text = """Try to stay attentive and answer as quickly and accurately as possible. It would also be great if you managed to lie as still as possible and not move your head in order to guarantee good data quality.
            If you have any questions, please contact the experimentor.
            Otherwise, press any button to start the experiment."""

        if session == str(1):
            text_4.text += """Andernfalls drücke eine beliebige Taste, um mit dem Experiment zu starten."""
        elif session == str(2):
            text_4.text += """ Nun noch ein letztes Mal viel Erfolg :).
            Drücke einen Knopf, um mit dem letzten Teil des Experiments zu starten."""
  Routine instructions_part3_3_1
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    TextComponent text_13
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        Diese Aufgabe ist wirklich schwierig. Es ist nicht das Ziel alle 128 Paare perfekt zu können.

        Versuche nicht frustiert zu werden und deine Motivation beizubehalten. :)

        Drücke eine beliebige Taste um fortzufahren.
    CodeComponent code_16
      Code Type = Py
      Begin Experiment:
        if session == str(1):
            if language == "english":
                text_3.text = """ Only after the picture selection will you be asked whether you knew the word or not.
                From now on, you will no longer receive feedback as to whether your answer was correct or incorrect.
                Press any button to continue. """
        if session == str(2):
            if language == "german":
                text_3.text = """Diesmal wirst du wieder kein Feedback erhalten, ob deine Antwort richtig oder falsch war. \n
                Die Aufgabe ist besonders schwer, also sei nicht frustriert, wenn du das Gefühl hast nicht die richtige Antwort zu wissen.
                Auch ein Vergleich der Leistung vor dem Mittagschlaf mit der jetzigen kann frustrierend sein. \n
                Drücke eine beliebige Taste um fortzufahren."""
            if language == "english":
                text_3.text = """Only after the picture selection will you be asked again whether you knew the word or not.
                This time you will not receive any feedback as to whether your answer was correct or incorrect.
                The task is particularly difficult, so don't get frustrated if you feel you don't know the right answer.
                Comparing your performance before the nap with your performance now can also be frustrating.
                It's better to just concentrate on the tasks now and try to answer as well as you can.
                Press any key to continue."""
    KeyboardComponent key_resp_10
      allowedKeys = 'y','g','r', 'b'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine save
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    CodeComponent code_17
      Code Type = Py
      Begin Routine:
        if session == str(1):
            #save feedback round scores
            false_alarms_retrieval1 = false_alarms
            misses_retrieval1 = misses
            incorrect_associations_retrieval1 = incorrect_associations
        elif session == str(2):
            #save feedback round scores
            false_alarms_retrieval2 = false_alarms
            misses_retrieval2 = misses
            incorrect_associations_retrieval2 = incorrect_associations

        # reset counters
        i_retrieval = 0
        false_alarms = 0
        misses = 0
        incorrect_associations = 0
  Routine Imagechoice_prac
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    ImageComponent image_choice1_prac
      image = stimuli/practice_encoding/dogxxx.jpg
      pos = (0, 0.25)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
      units = height
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    ImageComponent image_choice2_prac
      image = stimuli/buffer/face/face215.jpg
      pos = (0.5, 0)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
      units = height
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    ImageComponent image_choice3_prac
      image = stimuli/buffer/house/house271.png
      pos = (0, -0.25)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
      units = height
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    TextComponent text_14
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Welches Bild passt zu dem Wort?
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    CodeComponent code_18
      Code Type = Py
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      Begin Routine:
        #keine Überschreibungen der Tastendrücke
        button_press = None
        key_resp_retrieval_prac.clearEvents ()


        #Bilderzuweisung
        image_choice1_prac.image = "stimuli/" + df_trial_prac.image1
        image_choice2_prac.image = "stimuli/" + df_trial_prac.image2
        image_choice3_prac.image = "stimuli/" + df_trial_prac.image3
        image_choice4_prac.image = "stimuli/" + df_trial_prac.image4

        #richtiges Bild
        correct_image = df_trial_prac.correct
        print (correct_image)

        #define correct_buttonpress
        if correct_image == df_trial_prac.image1:
            correct_buttonpress = ["r"]
            print (correct_buttonpress)

        elif correct_image == df_trial_prac.image2:
            correct_buttonpress = ["b"]
            print (correct_buttonpress)

        elif correct_image == df_trial_prac.image3:
            correct_buttonpress = ["y"]
            print (correct_buttonpress)

        elif correct_image == df_trial_prac.image4:
            correct_buttonpress = ["g"]
            print (correct_buttonpress)

        elif correct_image == "N/A":
            correct_buttonpress = []
            print (correct_buttonpress)
      End Routine:
        button_press = [key_resp_retrieval_prac.keys]
        print ('button_press', button_press)

        #Falls keine Taste gedrückt wurde (Achtung, der Keyboard Status ändert sich immernoch nicht regulär)
        if button_press == [None] or button_press == [[]]:
            print ("too slow image")
            #log Ergebnisse
            responslog.write(session = "pratice", trial_num= i_retrieval, trial_type= "old", response='none', response_type='too_slow')
            text_tooslowimg.text = "Ups, zu langsam."
            text_tooslowimg.color = "red"
            no_press = True

        if misses == initial_value_misses and false_alarms == initial_value_false_alarms and button_press != correct_buttonpress and no_press == False and is_newword == False:
                incorrect_associations = incorrect_associations + 1
                print ("incorrect_association")
                #log Ergebnisse
                responslog.write(session = "practice", trial_num= i_retrieval, trial_type= "old", response='wrong', response_type='incorrect_association')

        print ("Status:", key_resp_retrieval_prac.status)

        #log Ergebnisse
        if misses != initial_value_misses and button_press == correct_buttonpress and no_press == False and is_newword == False:
            responslog.write(session = "practice", trial_num= i_retrieval, trial_type= "old", response='word wrong image correct', response_type='0.5*correct_association')
        elif false_alarms==initial_value_false_alarms and misses==initial_value_misses and incorrect_associations == initial_value_incorrect_associations and no_press == False and is_newword == False:
            responslog.write(session = "practice", trial_num= i_retrieval, trial_type= "old", response='correct', response_type='correct_association')
        elif false_alarms==initial_value_false_alarms and misses!=initial_value_misses and incorrect_associations != initial_value_incorrect_associations and no_press == False:
            responslog.write(session = "practice", trial_num= i_retrieval, trial_type= "old", response='wrong', response_type='double wrong')

        key_resp_retrieval_prac.clearEvents ()
    KeyboardComponent key_resp_retrieval_prac
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_choice4_prac
      image = stimuli/buffer/flower/flower264.png
      pos = (-0.5,0)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
      units = height
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    PolygonComponent img1_polygon_prac
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos = (0, 0.25)
      shape = rectangle
      size = polygon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
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    PolygonComponent img2_polygon_prac
      fillColor = None
      lineColor = -1.0000, -1.0000, 1.0000
      lineWidth = 2
      pos = (0.5, 0)
      shape = rectangle
      size = polygon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
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    PolygonComponent img3_polygon_prac
      draggable = True
      fillColor = None
      lineColor = 1.0000, 1.0000, -1.0000
      lineWidth = 2
      pos = (0, -0.25)
      shape = rectangle
      size = polygon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
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    PolygonComponent img4_polygon_prac
      fillColor = None
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 2
      pos = (-0.5, 0)
      shape = rectangle
      size = polygon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
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    TextComponent text_tooslowimg_prac
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.75
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    CodeComponent trigger_pratice_img
      Code Type = Py
      Begin Routine:
        send_trigger(120, duration=0.005)
      End Routine:
        send_trigger(121, duration=0.005)
  Routine sound_word_prac
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    TextComponent fixation_prac
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = cross_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code_19
      Code Type = Py
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      Begin Routine:
        # in GUI: verb.setSound("stimuli/sounds/de_" + df_trial_prac.word + ".mp3")
        #verb_prac.play() # play the sound
        log (verb_prac)

        is_newword = df_trial_prac.is_new

        # debug printing
        msg = f'practice {i_retrieval}/6'
        msg += f' {"foil" if is_newword else ""}'
        log(msg)
      End Routine:
        verb_prac.stop()
    SoundComponent verb_prac
      forceEndRoutine = False
      sound [set every repeat] = $"stimuli/sounds/de_" + df_trial_prac.word + ".mp3"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent trigger_practice
      Code Type = Py
      Begin Routine:
        if is_newword == True:
            send_trigger(140, duration = 0.005)
            trigger_send = False
        else:
            send_trigger(130, duration=0.005)
            trigger_send = False
      Each Frame:
        if verb_prac.status==FINISHED and not trigger_send and is_newword == False:
            trigger_send = True
            send_trigger(131, duration=0.005)
        elif verb_prac.status==FINISHED and not trigger_send and is_newword == True:
            trigger_send = True
            send_trigger(141, duration=0.005)
      End Routine:
        core.wait (0.02)
  Routine df_marking_prac
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    CodeComponent df_trial_3
      Code Type = Py
      Begin Routine:
        df_trial_prac = df_retrieval_prac.iloc[i_retrieval]
        #log (df_trial_prac)
  Routine break_2
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    TextComponent text_15
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        Eine kurze Pause.

        Bitte nimm eine kurze Verschnaufpause. Sobald du dich wieder bereit fühlst, drücke bitte eine beliebige Taste, um mit der Aufgabe fortzufahren.
    KeyboardComponent key_resp_11
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent code_20
      Code Type = Py
      Begin Routine:
        key_resp_11.clearEvents()
        log("start break")
        if language == "english":
            text_4.text = """<short break>
            Please take a short breather.
            Press any button if you want to continue with the next block."""
      End Routine:
        log("break ended")
        core.wait(0.01)  # wait so trigger can reset
    CodeComponent trigger_break
      Code Type = Py
      Begin Routine:
        send_trigger(111, duration=0.005)
      End Routine:
        send_trigger(222, duration=0.005)
  Routine counting_blocks
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    CodeComponent code_21
      Code Type = Py
      Begin Routine:
        i_block = break_blocks.thisN
  Routine decision_newword_2
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    TextComponent text_16
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      pos = (0, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        War dir das Wort bekannt?

        bekannt /alt                      unbekannt/neu
    KeyboardComponent key_resp_12
      allowedKeys = 'b','g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent known_green_2
      fillColor = none
      lineColor = -1.0000, 1.0000, -0.0039
      lineWidth = 1.5
      pos = (-0.25, 0)
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent new_blue_2
      fillColor = none
      lineColor = -0.2157, 0.1686, 0.8588
      lineWidth = 1.5
      pos = (0.2, 0)
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent decision_code_2
      Code Type = Py
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      Begin Routine:
        #event.getKeys löscht die Liste, sobald sie an den Code übergeben wurde...
        no_press = False
        button_press = None
        key_resp_12.clearEvents()

        word = str(df_trial_prac.word)
      Each Frame:
        #keys = key_resp_7.getKeys(clear = True, waitRelease = False)
        #print ('keys', keys)

        #if keys:
        #    button_press = [keys[-1].name]
        #    print ('button_press', button_press)
      End Routine:
        button_press = [key_resp_12.keys]
        print ('button_press', button_press)

        #defining logic
        if button_press == ["g"] and is_newword == True:
            false_alarms += 1
            print ("False Alarm") #neu als bekannt ausgewählt
            responslog.write(session = "practice",trial_num= i_retrieval, trial_type= "new", response='wrong', response_type='false alarm')
        elif button_press == ["g"] and is_newword == False:
            print ("Correct press")
            responslog.write(session = "practice", trial_num= i_retrieval, trial_type= "old", response='correct', response_type='correct_pic')
        elif button_press == ["b"] and is_newword == True:
            print ("Correct press")
            responslog.write(session = "practice", trial_num= i_retrieval, trial_type= "new", response='correct', response_type='correct_pic')
        elif button_press == ["b"] and is_newword == False:
            misses += 1
            print ("Miss") #bekanntes als neu ausgewählt
            responslog.write(session = "practice", trial_num= i_retrieval, trial_type= "old", response='wrong', response_type='miss')


        #Falls keine Taste gedrückt wurde (Achtung, der Keyboard Status ändert sich immernoch nicht regulär)
        if button_press == [None] or button_press == [[]]:
            print ("too slow word")
            responslog.write(session = "practice", trial_num= i_retrieval, trial_type= "", response='none', response_type='too_slow')
            text_tooslow_2.text = "Zu langsam, antworte schneller."
            text_tooslow_2.color = "red"
            no_press = True

        print("Status:", key_resp_7.status)
        key_resp_12.clearEvents()

        #keine Bilderauswahl bei neuem Wort
        nReps = 1
        nReps2 = 1
        if is_newword == True:
            nReps = 0
            nReps2 = 0
        if no_press == True:
            nReps = 0
            nReps2 = 0
        print ("nReps:", nReps)
        print ("nReps2:", nReps2)
    TextComponent text_tooslow_2
      color = 1.0000, 1.0000, 1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 2
      stopVal [time (s)] = 2.75
      text = dummy
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    CodeComponent trigger_decision_word_2
      Code Type = Py
      End Routine:
        send_trigger (77,duration = 0.005)
  Routine instructions_practice
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    TextComponent text_17
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        Da ihr gleich beim Experiment alle gelernten Paare gleich oft sehen sollt gibt es für die Übung der Aufgaben drei neue Paare! Diese waren und sind nicht Teil eures Lern-Sets und sollen auch nicht weiter verinnerlicht werden. Sie dienen einzig dem Zweck, dass ihr die Aufgaben üben und verstehen könnt :)

        Für die Übung nehmen wir an, dass ihr folgende Paare gelernt habt:


        Drücke eine beliebige Taste um fortzufahren.
    KeyboardComponent key_resp_13
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent code_30
      Code Type = Py
      Begin Routine:
        if session==str(1):
            continueRoutine = True
        else:
            continueRoutine = False
  Routine stimuli_display
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    ImageComponent example_1
      image = stimuli/practice_encoding/dogxxx.jpg
      pos = (0.2, 0.2)
      size = image_size_example
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent example_2
      pos = (0.2, 0)
      size = image_size_example
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent example_3
      pos = (0.2, -0.2)
      size = image_size_example
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent code_22
      Code Type = Py
      Begin Routine:
        if session==str(1):
            continueRoutine = True
        else:
            continueRoutine = False


        example_1.image = "stimuli/practice_encoding/dogxxx.png"
        example_2.image = "stimuli/practice_encoding/facexxx.png"
        example_3.image = "stimuli/practice_encoding/flowerxxx.png"
    TextComponent verb_1
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      pos = (-0.2, 0.4)
      startVal [time (s)] = 0.0
      text = Paar 1:   Wort: "folgen"          &
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    TextComponent verb_2
      color = -1.0000, -1.0000, -1.0000
      font = TImes New Roman
      letterHeight = letter_height
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      text = Paar 2:  Wort: "leeren"          &
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    TextComponent verb_3
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      pos = (-0.2, -0.4)
      startVal [time (s)] = 0.0
      text = Paar 3: Wort: "warnen"          &
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    KeyboardComponent key_resp_14
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    TextComponent Heading
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text = Sobald du sie dir eingeprägt hast starte mit der Übung, indem du einen beliebigen Knopf drückst.
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    TextComponent Heading1
      color = black
      font = Times New roman
      letterHeight = letter_height
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text = Versuche dir diese Paare einzuprägen:
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  Routine retrieval_feedback_word
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    TextComponent text_18
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = dummy something went wrong
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    CodeComponent code_23
      Code Type = Py
      Begin Routine:
        if false_alarms==initial_value_false_alarms and misses==initial_value_misses and no_press == False:
            text_18.text = "Richtig!"
            text_18.color = "green"
        else:
            feedback_string = ''
            if no_press == True:
                feedback_string += f"Du musst schneller antworten."
            if misses != initial_value_misses:
                feedback_string += f'Das Wort war dir bekannt.\n'
            if false_alarms != initial_value_false_alarms:
                feedback_string += f'Das Wort war neu, du hast es jedoch als bekannt eingestuft.\n'
            text_18.text = feedback_string
            text_18.color = 'red'
  Routine buffer_primacy_imagechoice
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    ImageComponent image_choice1_3
      image = stimuli/buffer/dog/dog270.png
      pos = (0, 0.25)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
      units = height
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    ImageComponent image_choice2_3
      image = stimuli/buffer/flower/flower264.png
      pos = (0.5, 0)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
      units = height
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    ImageComponent image_choice3_3
      image = stimuli/buffer/house/house268.png
      pos = (0, -0.25)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
      units = height
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    TextComponent text_19
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Welches Bild passt zu dem Wort?
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    CodeComponent code_24
      Code Type = Py
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      Begin Routine:
        #keine Überschreibungen der Tastendrücke
        button_press = None
        key_resp_retrieval_3.clearEvents ()


        #Bilderzuweisung
        image_choice1_3.image = "stimuli/buffer/" + str(df_trial.image1)
        image_choice2_3.image = "stimuli/buffer/" + str(df_trial.image2)
        image_choice3_3.image = "stimuli/buffer/" + str(df_trial.image3)
        image_choice4_3.image = "stimuli/buffer/" + str(df_trial.image4)

        #richtiges Bild
        correct_image = df_trial.correct
        log ("correct image:" , correct_image)

        #define correct_buttonpress
        if correct_image == df_trial.image1:
            correct_buttonpress = ["r"]
            log ("correct_press:", correct_buttonpress)

        elif correct_image == df_trial.image2:
            correct_buttonpress = ["b"]
            log ("correct_press:",correct_buttonpress)

        elif correct_image == df_trial.image3:
            correct_buttonpress = ["y"]
            log ("correct_press:",correct_buttonpress)

        elif correct_image == df_trial.image4:
            correct_buttonpress = ["g"]
            log ("correct_press:",correct_buttonpress)

        elif correct_image == "N/A":
            correct_buttonpress = []
            log ("correct_press:",correct_buttonpress)
      End Routine:
        button_press = [key_resp_retrieval_3.keys]
        print ('button_press', button_press)

        #Falls keine Taste gedrückt wurde (Achtung, der Keyboard Status ändert sich immernoch nicht regulär)
        if button_press == [None] or button_press == [[]]:
            print ("too slow image")
            responslog.write(session = "1-buffer", trial_num= i_retrieval, trial_type= "old", response='none', response_type='too_slow')
            text_tooslowimg_3.text = "Ups, zu langsam."
            text_tooslowimg_3.color = "red"
            no_press = True

        if misses == initial_value_misses and false_alarms == initial_value_false_alarms and button_press != correct_buttonpress and no_press == False and is_newword == False:
                incorrect_associations = incorrect_associations + 1
                responslog.write(session = "1-buffer",trial_num= i_retrieval, trial_type= "old", response='wrong', response_type='incorrect_association')
                print ("incorrect_association")

        #print ("Status:", key_resp_retrieval.status)
        #log Ergebnisse
        if misses != initial_value_misses and button_press == correct_buttonpress and no_press == False and is_newword == False:
            responslog.write(session = "1-buffer", trial_num= i_retrieval, trial_type= "old", response='word wrong image correct', response_type='0.5*correct_association')
        elif false_alarms==initial_value_false_alarms and misses==initial_value_misses and incorrect_associations == initial_value_incorrect_associations and no_press == False and is_newword == False:
            responslog.write(session = "1-buffer", trial_num= i_retrieval, trial_type= "old", response='correct', response_type='correct_association')
        elif false_alarms==initial_value_false_alarms and misses!=initial_value_misses and incorrect_associations != initial_value_incorrect_associations and no_press == False:
                responslog.write(session = "2", trial_num= i_retrieval, trial_type= "old", response='wrong', response_type='double wrong')

        key_resp_retrieval_3.clearEvents ()
    KeyboardComponent key_resp_retrieval_3
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_choice4_3
      image = stimuli/buffer/face/face271.png
      pos = (-0.5,0)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
      units = height
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    PolygonComponent img1_polygon_3
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos = (0, 0.25)
      shape = rectangle
      size = polygon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
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    PolygonComponent img2_polygon_3
      fillColor = None
      lineColor = -1.0000, -1.0000, 1.0000
      lineWidth = 2
      pos = (0.5, 0)
      shape = rectangle
      size = polygon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
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    PolygonComponent img3_polygon_3
      fillColor = None
      lineColor = 1.0000, 1.0000, -1.0000
      lineWidth = 2
      pos = (0, -0.25)
      shape = rectangle
      size = polygon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
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    PolygonComponent img4_polygon_3
      fillColor = None
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 2
      pos = (-0.5, 0)
      shape = rectangle
      size = polygon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
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    TextComponent text_tooslowimg_3
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.75
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    CodeComponent trigger_buffer_img
      Code Type = Py
      Begin Routine:
        send_trigger(220, duration=0.005)
      End Routine:
        send_trigger(221, duration=0.005)
  Routine sound_word_buffer
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    TextComponent fixation_2
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = cross_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code_27
      Code Type = Py
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      Begin Routine:
        verb_4.setSound("stimuli/buffer/de_" + df_trial.word + ".mp3")
        verb_4.play() # play the sound

        is_newword = df_trial.is_new


        # debug printing
        msg += f' {"foil" if is_newword else ""}'
        log(msg)
      End Routine:
        verb_4.stop()
    SoundComponent verb_4
      forceEndRoutine = False
      sound [set every repeat] = $"stimuli/buffer/de_" + df_trial.word + ".mp3"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent trigger_word_buffer_2
      Code Type = Py
      Begin Routine:
        if is_newword == True:
            send_trigger(240, duration = 0.005)
            trigger_send = False
        else:
            send_trigger(230, duration=0.005)
            trigger_send = False
      Each Frame:
        if verb.status==FINISHED and not trigger_send and is_newword == False:
            trigger_send = True
            send_trigger(231, duration=0.005)
        elif verb.status==FINISHED and not trigger_send and is_newword == True:
            trigger_send = True
            send_trigger(241, duration=0.005)
      End Routine:
        core.wait (0.02)
  Routine counting_buffer
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    CodeComponent code_28
      Code Type = Py
      Begin Routine:
        i_buffer += 1
        i_buffer_recency += 1
  Routine df_buffer_recency
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    CodeComponent code_26
      Code Type = Py
      Begin Routine:
        df_trial = df_buffer.iloc[i_buffer_recency]

        msg = f'buffer_recency {i_buffer_recency}/8'
        log (msg)
  Routine df_buffer_primacy
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    CodeComponent code_25
      Code Type = Py
      Begin Routine:
        df_trial = df_buffer.iloc[i_buffer]

        msg = f'buffer_primacy {i_buffer}/4'
        log (msg)
  Routine counting_retrieval
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    CodeComponent code_29
      Code Type = Py
      Begin Routine:
        #count to next trial
        i_retrieval += 1

        # set the break conditional to true to display a break
        n_break_conditional = int(i_block in breaks_after_block) # i_block in break
  Routine counting_blocks2
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    CodeComponent code_31
      Code Type = Py
      Begin Routine:
        i_block = break_blocks2.thisN
  Routine core_wait
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    CodeComponent code_32
      Code Type = Py
      Begin Routine:
        core.wait (0.5)
Flow
  Routine startup_code
  Routine instuctions_part3
  Routine instructions_part3_1
  Routine instructions_part3_2
  Routine instructions_practice
  Routine stimuli_display
  LoopInitiator retrieval_repetition loopType="TrialHandler"
    loopType = sequential
    nReps = n_retrieval_repetition
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    LoopInitiator retrieval_trials_prac loopType="TrialHandler"
      loopType = sequential
      nReps = n_retrieval_trials_prac
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      Routine df_marking_prac
      Routine fixation_cross
      Routine sound_word_prac
      Routine onesecond
      Routine decision_newword_2
      LoopInitiator loop loopType="TrialHandler"
        loopType = random
        nReps = nReps
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        Routine Imagechoice_prac
      LoopTerminator loop
      Routine retrieval_feedback
    LoopTerminator retrieval_trials_prac
    Routine practice_feedback
  LoopTerminator retrieval_repetition
  Routine reset
  LoopInitiator buffer_primacy loopType="TrialHandler"
    loopType = sequential
    nReps = n_buffer_primacy
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    Routine df_buffer_primacy
    Routine fixation_cross
    Routine sound_word_buffer
    Routine onesecond
    Routine decision_newword
    Routine retrieval_feedback_word
    Routine buffer_primacy_imagechoice
    Routine retrieval_feedback
    Routine counting_buffer
  LoopTerminator buffer_primacy
  Routine reset
  LoopInitiator break_blocks loopType="TrialHandler"
    loopType = random
    nReps = n_break_blocks
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    Routine counting_blocks
    LoopInitiator retrieval_trials loopType="TrialHandler"
      loopType = random
      nReps = n_retrieval_trials
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      Routine df_marking_1
      Routine fixation_cross
      Routine sound_word
      Routine onesecond
      Routine decision_newword
      Routine retrieval_feedback_word
      LoopInitiator loop2 loopType="TrialHandler"
        loopType = random
        nReps = nReps2
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        Routine imagechoice
      LoopTerminator loop2
      Routine retrieval_feedback
    LoopTerminator retrieval_trials
    LoopInitiator break_conditional loopType="TrialHandler"
      loopType = random
      nReps = n_break_conditional
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      Routine break_2
    LoopTerminator break_conditional
  LoopTerminator break_blocks
  Routine save_reset
  LoopInitiator buffer_recency loopType="TrialHandler"
    loopType = random
    nReps = n_buffer_recency
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    Routine df_buffer_recency
    Routine fixation_cross
    Routine sound_word_buffer
    Routine onesecond
    Routine decision_newword
    Routine retrieval_feedback_word
    Routine buffer_primacy_imagechoice
    Routine retrieval_feedback
    Routine counting_buffer
  LoopTerminator buffer_recency
  Routine reset
  Routine instructions_part3_3
  Routine instructions_part3_3_1
  Routine instructions_part3_3_2
  LoopInitiator break_blocks2 loopType="TrialHandler"
    loopType = random
    nReps = n_break_blocks2
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    Routine counting_blocks2
    LoopInitiator retrieval2_trials loopType="TrialHandler"
      loopType = random
      nReps = n_retrieval2_trials
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      Routine df_marking_2
      Routine fixation_cross
      Routine sound_word
      Routine onesecond
      Routine decision_newword
      LoopInitiator loop3 loopType="TrialHandler"
        loopType = random
        nReps = nReps3
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        Routine imagechoice_2
      LoopTerminator loop3
      Routine counting_retrieval
    LoopTerminator retrieval2_trials
    Routine core_wait
    LoopInitiator break_conditional2 loopType="TrialHandler"
      loopType = random
      nReps = n_break_conditional
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      Routine break_2
    LoopTerminator break_conditional2
  LoopTerminator break_blocks2
  Routine save
  Routine instruction_end
